PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Completed URL = http://localhost
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = untitled
  exportHTML = on Save
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine stealing_its_code_1
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    ImageComponent top_left_img
      image = resources/image_1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.5
      units = height
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    StaticComponent ISI_load_images_2
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent top_mid_img
      image = resources/image_2.png
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent top_right_img
      image = resources/image_3.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent bott_right_img
      image = resources/image_4.png
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent bott_mid_img
      image = resources/image_5.png
      pos = (0, -0.25)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent bott_left_img
      image = resources/image_6.png
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0.5
      units = height
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    MouseComponent selecting_img_mouse
      clickable = top_left_img, top_mid_img, top_right_img, bott_right_img, bott_mid_img, bott_left_img
      correctAns = bott_left_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.5
      storeCorrect = True
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    ImageComponent ref_img
      image = resources/image_7.png
      pos = (0, 0.3)
      startVal [time (s)] = 0.5
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  Routine consent
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    TextComponent ask_consent
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Now that you understand what will be expected from you as well as what data will be collected, do you consent? (y/n)
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    KeyboardComponent consent_key
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Each Frame:
        if(consent_key.keys == 'n' or consent_key.keys == str('n')):
            return quit
      Each JS Frame:
        //check if unconsented
        if(consent_key.keys === 'n' || consent_key.keys === String("n")){
          return quitPsychoJS('Unconsented through pressing the [n] key. Goodbye!', false);
        }
Flow
  Routine consent
  Routine stealing_its_code_1
